---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title VWPAllopena
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "F:/experimental-scripts/opensesame/VisualWorldParadigm"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define logger behaviourallog
	set description "Logs experimental data"
	set auto_log yes

define pygaze_init calibration_validation
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sampler carrier_audio
	set volume 1
	set stop_after 0
	set sample "[instruction_audio]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define pygaze_drift_correct drift_correction
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run calibration_validation True
	run experiment_sequence True
	run goodbye True

define loop experiment_sequence
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 O1 "beaker.jpg"
	setcycle 0 O1_type referent
	setcycle 0 O2 "bettle.bmp"
	setcycle 0 O2_type cohort
	setcycle 0 O3 "speaker.jpg"
	setcycle 0 O3_type rhyme
	setcycle 0 O4 "dolphin.jpg"
	setcycle 0 O4_type unrelated
	setcycle 0 set_type full
	setcycle 0 target_type referent
	setcycle 0 target_image O1
	setcycle 0 instruction_audio "pick-up-beaker.wav"
	setcycle 0 target_audio "beaker.wav"
	setcycle 0 O1_pos TR
	setcycle 0 O2_pos TL
	setcycle 0 O3_pos BR
	setcycle 0 O4_pos BL
	setcycle 1 O1 "carrot.jpg"
	setcycle 1 O1_type referent
	setcycle 1 O2 "carriage.bmp"
	setcycle 1 O2_type cohort
	setcycle 1 O3 "parrot.jpg"
	setcycle 1 O3_type rhyme
	setcycle 1 O4 "nickle.jpg"
	setcycle 1 O4_type unrelated
	setcycle 1 set_type full
	setcycle 1 target_type cohort
	setcycle 1 target_image O2
	setcycle 1 instruction_audio "pick-up-carriage.wav"
	setcycle 1 target_audio "carriage.wav"
	setcycle 1 O1_pos BL
	setcycle 1 O2_pos TR
	setcycle 1 O3_pos TL
	setcycle 1 O4_pos BR
	setcycle 2 O1 "pickle.jpg"
	setcycle 2 O1_type referent
	setcycle 2 O2 "picture.jpg"
	setcycle 2 O2_type cohort
	setcycle 2 O3 "nickle.jpg"
	setcycle 2 O3_type rhyme
	setcycle 2 O4 "speaker.jpg"
	setcycle 2 O4_type unrelated
	setcycle 2 set_type full
	setcycle 2 target_type rhyme
	setcycle 2 target_image O3
	setcycle 2 instruction_audio "pick-up-nickle.wav"
	setcycle 2 target_audio "nickle.wav"
	setcycle 2 O1_pos BR
	setcycle 2 O2_pos BL
	setcycle 2 O3_pos TR
	setcycle 2 O4_pos TL
	setcycle 3 O1 "candle.jpg"
	setcycle 3 O1_type referent
	setcycle 3 O2 "candy.jpg"
	setcycle 3 O2_type cohort
	setcycle 3 O3 "handle.bmp"
	setcycle 3 O3_type rhyme
	setcycle 3 O4 "dollar.jpg"
	setcycle 3 O4_type unrelated
	setcycle 3 set_type full
	setcycle 3 target_type unrelated
	setcycle 3 target_image O4
	setcycle 3 instruction_audio "pick-up-dollar.wav"
	setcycle 3 target_audio "dollar.wav"
	setcycle 3 O1_pos TL
	setcycle 3 O2_pos BR
	setcycle 3 O3_pos BL
	setcycle 3 O4_pos TR
	setcycle 4 O1 "casket.jpg"
	setcycle 4 O1_type referent
	setcycle 4 O2 "castle.jpg"
	setcycle 4 O2_type cohort
	setcycle 4 O3 "saddle.jpg"
	setcycle 4 O3_type unrelated
	setcycle 4 O4 "padlock.bmp"
	setcycle 4 O4_type unrelated
	setcycle 4 set_type cohort
	setcycle 4 target_type cohort
	setcycle 4 target_image O2
	setcycle 4 instruction_audio "pick-up-castle.wav"
	setcycle 4 target_audio "castle.wav"
	setcycle 4 O1_pos TR
	setcycle 4 O2_pos TL
	setcycle 4 O3_pos BR
	setcycle 4 O4_pos BL
	setcycle 5 O1 "paddle.jpg"
	setcycle 5 O1_type referent
	setcycle 5 O2 "padlock.bmp"
	setcycle 5 O2_type cohort
	setcycle 5 O3 "basket.jpg"
	setcycle 5 O3_type unrelated
	setcycle 5 O4 "nickle.jpg"
	setcycle 5 O4_type unrelated
	setcycle 5 set_type cohort
	setcycle 5 target_type cohort
	setcycle 5 target_image O2
	setcycle 5 instruction_audio "pick-up-padlock.wav"
	setcycle 5 target_audio "padlock.wav"
	setcycle 5 O1_pos BL
	setcycle 5 O2_pos TR
	setcycle 5 O3_pos TL
	setcycle 5 O4_pos BR
	setcycle 6 O1 "dolphin.jpg"
	setcycle 6 O1_type referent
	setcycle 6 O2 "dollar.jpg"
	setcycle 6 O2_type cohort
	setcycle 6 O3 "sandwich.jpg"
	setcycle 6 O3_type unrelated
	setcycle 6 O4 "parrot.jpg"
	setcycle 6 O4_type unrelated
	setcycle 6 set_type cohort
	setcycle 6 target_type referent
	setcycle 6 target_image O1
	setcycle 6 instruction_audio "pick-up-dolphin.wav"
	setcycle 6 target_audio "dolphin.wav"
	setcycle 6 O1_pos BR
	setcycle 6 O2_pos BL
	setcycle 6 O3_pos TR
	setcycle 6 O4_pos TL
	setcycle 7 O1 "sandal.bmp"
	setcycle 7 O1_type referent
	setcycle 7 O2 "sandwich.jpg"
	setcycle 7 O2_type cohort
	setcycle 7 O3 "collar.bmp"
	setcycle 7 O3_type unrelated
	setcycle 7 O4 "beaker.jpg"
	setcycle 7 O4_type unrelated
	setcycle 7 set_type cohort
	setcycle 7 target_type referent
	setcycle 7 target_image O1
	setcycle 7 instruction_audio "pick-up-sandal.wav"
	setcycle 7 target_audio "sandal.wav"
	setcycle 7 O1_pos TL
	setcycle 7 O2_pos BR
	setcycle 7 O3_pos BL
	setcycle 7 O4_pos TR
	setcycle 8 O1 "carrot.jpg"
	setcycle 8 O1_type referent
	setcycle 8 O2 "parrot.jpg"
	setcycle 8 O2_type rhyme
	setcycle 8 O3 "nickle.jpg"
	setcycle 8 O3_type unrelated
	setcycle 8 O4 "speaker.jpg"
	setcycle 8 O4_type unrelated
	setcycle 8 set_type "rhyme "
	setcycle 8 target_type rhyme
	setcycle 8 target_image O2
	setcycle 8 instruction_audio "pick-up-parrot.wav"
	setcycle 8 target_audio "parrot.wav"
	setcycle 8 O1_pos TR
	setcycle 8 O2_pos TL
	setcycle 8 O3_pos BR
	setcycle 8 O4_pos BL
	setcycle 9 O1 "sandal.bmp"
	setcycle 9 O1_type referent
	setcycle 9 O2 "candle.jpg"
	setcycle 9 O2_type rhyme
	setcycle 9 O3 "dolphin.jpg"
	setcycle 9 O3_type unrelated
	setcycle 9 O4 "collar.bmp"
	setcycle 9 O4_type unrelated
	setcycle 9 set_type rhyme
	setcycle 9 target_type rhyme
	setcycle 9 target_image O2
	setcycle 9 instruction_audio "pick-up-candle.wav"
	setcycle 9 target_audio "candle.wav"
	setcycle 9 O1_pos BL
	setcycle 9 O2_pos TR
	setcycle 9 O3_pos TL
	setcycle 9 O4_pos BR
	setcycle 10 O1 "paddle.jpg"
	setcycle 10 O1_type referent
	setcycle 10 O2 "saddle.jpg"
	setcycle 10 O2_type rhyme
	setcycle 10 O3 "casket.jpg"
	setcycle 10 O3_type unrelated
	setcycle 10 O4 "beaker.jpg"
	setcycle 10 O4_type unrelated
	setcycle 10 set_type rhyme
	setcycle 10 target_type referent
	setcycle 10 target_image O1
	setcycle 10 instruction_audio "pick-up-paddle.wav"
	setcycle 10 target_audio "paddle.wav"
	setcycle 10 O1_pos BR
	setcycle 10 O2_pos BL
	setcycle 10 O3_pos TR
	setcycle 10 O4_pos TL
	setcycle 11 O1 "casket.jpg"
	setcycle 11 O1_type referent
	setcycle 11 O2 "basket.jpg"
	setcycle 11 O2_type rhyme
	setcycle 11 O3 "picture.jpg"
	setcycle 11 O3_type unrelated
	setcycle 11 O4 "saddle.jpg"
	setcycle 11 O4_type unrelated
	setcycle 11 set_type rhyme
	setcycle 11 target_type referent
	setcycle 11 target_image O1
	setcycle 11 instruction_audio "pick-up-casket.wav"
	setcycle 11 target_audio "casket.wav"
	setcycle 11 O1_pos TL
	setcycle 11 O2_pos BR
	setcycle 11 O3_pos BL
	setcycle 11 O4_pos TR
	setcycle 12 O1 "dollar.jpg"
	setcycle 12 O1_type referent
	setcycle 12 O2 "sandwich.jpg"
	setcycle 12 O2_type unrelated
	setcycle 12 O3 "candle.jpg"
	setcycle 12 O3_type unrelated
	setcycle 12 O4 "bettle.bmp"
	setcycle 12 O4_type unrelated
	setcycle 12 set_type unrelated
	setcycle 12 target_type unrelated
	setcycle 12 target_image O2
	setcycle 12 instruction_audio "pick-up-sandwich.wav"
	setcycle 12 target_audio "sandwich.wav"
	setcycle 12 O1_pos TR
	setcycle 12 O2_pos TL
	setcycle 12 O3_pos BR
	setcycle 12 O4_pos BL
	setcycle 13 O1 "paddle.jpg"
	setcycle 13 O1_type referent
	setcycle 13 O2 "basket.jpg"
	setcycle 13 O2_type unrelated
	setcycle 13 O3 "dollar.jpg"
	setcycle 13 O3_type unrelated
	setcycle 13 O4 "castle.jpg"
	setcycle 13 O4_type unrelated
	setcycle 13 set_type unrelated
	setcycle 13 target_type unrelated
	setcycle 13 target_image O2
	setcycle 13 instruction_audio "pick-up-basket.wav"
	setcycle 13 target_audio "basket.wav"
	setcycle 13 O1_pos BL
	setcycle 13 O2_pos TR
	setcycle 13 O3_pos TL
	setcycle 13 O4_pos BR
	setcycle 14 O1 "pickle.jpg"
	setcycle 14 O1_type referent
	setcycle 14 O2 "candle.jpg"
	setcycle 14 O2_type unrelated
	setcycle 14 O3 "handle.bmp"
	setcycle 14 O3_type unrelated
	setcycle 14 O4 "candy.jpg"
	setcycle 14 O4_type unrelated
	setcycle 14 set_type unrelated
	setcycle 14 target_type referent
	setcycle 14 target_image O1
	setcycle 14 instruction_audio "pick-up-pickle.wav"
	setcycle 14 target_audio "pickle.wav"
	setcycle 14 O1_pos BR
	setcycle 14 O2_pos BL
	setcycle 14 O3_pos TR
	setcycle 14 O4_pos TL
	setcycle 15 O1 "carrot.jpg"
	setcycle 15 O1_type referent
	setcycle 15 O2 "bettle.bmp"
	setcycle 15 O2_type unrelated
	setcycle 15 O3 "speaker.jpg"
	setcycle 15 O3_type unrelated
	setcycle 15 O4 "dolphin.jpg"
	setcycle 15 O4_type unrelated
	setcycle 15 set_type unrelated
	setcycle 15 target_type referent
	setcycle 15 target_image O1
	setcycle 15 instruction_audio "pick-up-carrot.wav"
	setcycle 15 target_audio "carrot.wav"
	setcycle 15 O1_pos TL
	setcycle 15 O2_pos BR
	setcycle 15 O3_pos BL
	setcycle 15 O4_pos TR
	run trial_sequence

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"

define pygaze_log logvariables
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define sampler noun_audio
	set volume 1
	set stop_after 0
	set sample "[target_audio]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define mouse_response object_click
	set timeout 2000
	set show_cursor yes
	set linked_sketchpad response_screen
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sketchpad preview_window
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="[O1]" scale=1 show_if=True x=0 y=-192 z_index=0
	draw image center=1 file="[O2]" scale=1 show_if=True x=-256 y=0 z_index=0
	draw image center=1 file="[O3]" scale=1 show_if=True x=256 y=0 z_index=0
	draw image center=1 file="[O4]" scale=1 show_if=True x=0 y=192 z_index=0

define sketchpad response_scene
	set duration keypress
	set description "Displays stimuli"

define sketchpad response_screen
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[O1]" scale=1 show_if=True x=0 y=-192 z_index=0
	draw image center=1 file="[O2]" scale=1 show_if=True x=-256 y=0 z_index=0
	draw image center=1 file="[O3]" scale=1 show_if=True x=256 y=0 z_index=0
	draw image center=1 file="[O4]" scale=1 show_if=True x=0 y=192 z_index=0

define inline_script send_areas_of_interest
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script setup
	set description "Executes Python code"
	set _run "# we are going to create a function to then draw our areas of interest"
	set _prepare ""

define pygaze_start_recording start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run drift_correction True
	run start_recording True
	run trigger_preview True
	run send_areas_of_interest True
	run preview_window True
	run trigger_carrieronset True
	run carrier_audio True
	run trigger_targetonset True
	run noun_audio True
	run trigger_targetoffset True
	run response_screen True
	run object_click True
	run logvariables True
	run stop_recording True
	run behaviourallog True

define inline_script trigger_carrieronset
	set description "Executes Python code"
	set _run "exp.pygaze_eyetracker.log('instruction_onset')"
	set _prepare ""

define inline_script trigger_preview
	set description "Executes Python code"
	set _run "exp.pygaze_eyetracker.log('preview_window')"
	set _prepare ""

define inline_script trigger_targetoffset
	set description "Executes Python code"
	set _run "exp.pygaze_eyetracker.log('target_offset')"
	set _prepare ""

define inline_script trigger_targetonset
	set description "Executes Python code"
	set _run "exp.pygaze_eyetracker.log('target_onset')"
	set _prepare ""

define sketchpad welcome
	set duration keypress
	set description "Displays stimuli"

